CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (directory doesnot containregexp "[\\\\\\\\\\\\\\\\/]\\\\\\\\.")

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
    Select the rule criteria:or (file does contain "_neuronID")
    Name to assign these images:neuron_mask
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    Select the image type:Binary mask
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    Select the rule criteria:or (directory does contain "Extracted")
    Name to assign these images:raw
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Crop:[module_num:5|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
    Select the input image:raw
    Name the output image:Crop
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:10,-10
    Top and bottom rectangle positions:10,-10
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    Remove empty rows and columns?:Edges
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
ImageMath:[module_num:6|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath
    Image or measurement?:Image
    Select the first image:Crop
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:neuron_mask
    Multiply the second image by:1.0
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
MeasureImageIntensity:[module_num:7|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
    Select the image to measure:Crop
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:ImageAfterMath
    Measure the intensity only from areas enclosed by objects?:No
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
MeasureImageAreaOccupied:[module_num:8|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
    Hidden:1
    Measure the area occupied in a binary image, or in objects?:Binary Image
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    Retain a binary image of the object regions?:No
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    Select a binary image to measure:neuron_mask

ExportToSpreadsheet:[module_num:9|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder sub-folder|20150819_SNRanalysis
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:Image|Intensity_TotalIntensity_Crop,Image|Intensity_TotalIntensity_ImageAfterMath,Image|Intensity_TotalArea_Crop,Image|Intensity_TotalArea_ImageAfterMath,Image|Intensity_MeanIntensity_Crop,Image|Intensity_MeanIntensity_ImageAfterMath
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::20150819_SNRanalysis
    Overwrite without warning?:No
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