CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:23
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (directory doesnot containregexp "[\\\\\\\\\\\\\\\\/]\\\\\\\\.")

Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:4
    Select the rule criteria:or (directory does contain "BF")
    Name to assign these images:fish_images_BF
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    Select the image type:Binary mask
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    Select the rule criteria:and (file does contain "wv")
    Name to assign these images:fish_images
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Single image location:file:///C:/Users/harri_000/Documents/Zebrafish%20Project/Zebrafish-Image-Processing/process_Mask.tif   
    Name to assign this image:eyemask
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    Select the image type:Binary mask
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    Single image location:file:///C:/Users/harri_000/Documents/Zebrafish%20Project/Zebrafish-Image-Processing/brain_Mask_Inner.tif   
    Name to assign this image:brain_mask_inner
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    Select the image type:Binary mask
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    Single image location:file:///C:/Users/harri_000/Documents/Zebrafish%20Project/Zebrafish-Image-Processing/brain_Mask_Outer.tif   
    Name to assign this image:brain_mask_outer
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    Select the image type:Binary mask
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    Single image location:file:///C:/Users/harri_000/Documents/Zebrafish%20Project/Zebrafish-Image-Processing/AVG_neuron.tif   
    Name to assign this image:avg_brain
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    Select the image type:Binary mask
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Resize:[module_num:5|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
    Select the input image:fish_images_BF
    Name the output image:BF_resized
    Resizing method:Resize by specifying desired final dimensions
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    Width of the final image:191
    Height of the final image:221
    Interpolation method:Nearest Neighbor
    Method to specify the dimensions:Manual
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    Additional image count:0

MaskImage:[module_num:6|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
    Select the input image:fish_images
    Name the output image:eyes_removed
    Use objects or an image as a mask?:Image
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    Select image for mask:BF_resized
    Invert the mask?:No

Crop:[module_num:7|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
    Select the input image:eyes_removed
    Name the output image:eyes_removed_cropped
    Select the cropping shape:Rectangle
    Select the cropping method:Coordinates
    Apply which cycle's cropping pattern?:Every
    Left and right rectangle positions:10,-10
    Top and bottom rectangle positions:10,-10
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    Remove empty rows and columns?:Edges
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
Smooth:[module_num:8|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
    Select the input image:eyes_removed_cropped
    Name the output image:neuron_bkg
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:12
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
ImageMath:[module_num:9|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:filtered_img
    Image or measurement?:Image
    Select the first image:eyes_removed
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:neuron_bkg
    Multiply the second image by:1.0
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
MaskImage:[module_num:10|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
    Select the input image:filtered_img
    Name the output image:inner_neurons
    Use objects or an image as a mask?:Image
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    Select image for mask:brain_mask_inner
    Invert the mask?:No

MeasureImageIntensity:[module_num:11|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
    Select the image to measure:filtered_img
    Measure the intensity only from areas enclosed by objects?:No
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:inner_neurons
    Name the primary objects to be identified:Neurons_inner
    Typical diameter of objects, in pixel units (Min,Max):3,20
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:100
    Threshold setting version:1
    Threshold strategy:Measurement
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    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:10
    Lower and upper bounds on threshold:0.0005,1.0
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    Select the measurement to threshold with:Intensity_UpperQuartileIntensity_filtered_img
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
SaveImages:[module_num:13|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
    Select the type of image to save:Objects
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    Select the objects to save:Neurons_inner
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    Select method for constructing file names:From image filename
    Select image name for file prefix:fish_images
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_neuronID
    Saved file format:png
    Output file location:Default Output Folder sub-folder|Images
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Color
    Select colormap:jet
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:fish_images
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    Select method for constructing file names:From image filename
    Select image name for file prefix:fish_images
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    Append a suffix to the image file name?:No
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    Saved file format:tif
    Output file location:Default Output Folder sub-folder|Images
    Image bit depth:16
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
MeasureObjectIntensity:[module_num:15|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
    Hidden:1
    Select an image to measure:inner_neurons
    Select objects to measure:Neurons_inner

ImageMath:[module_num:16|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:Yes
    Name the output image:ghettoconv
    Image or measurement?:Image
    Select the first image:avg_brain
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:inner_neurons
    Multiply the second image by:1.0
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
ConvertObjectsToImage:[module_num:17|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
    Select the input objects:Neurons_inner
    Name the output image:Neurons_binary
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:18|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:position_measure
    Image or measurement?:Image
    Select the first image:avg_brain
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:Neurons_binary
    Multiply the second image by:1.0
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
MeasureImageIntensity:[module_num:19|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
    Select the image to measure:position_measure
    Measure the intensity only from areas enclosed by objects?:No
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
MeasureImageIntensity:[module_num:20|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
    Select the image to measure:inner_neurons
    Measure the intensity only from areas enclosed by objects?:No
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
MeasureImageIntensity:[module_num:21|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
    Select the image to measure:inner_neurons
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:Neurons_inner

MeasureImageIntensity:[module_num:22|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
    Select the image to measure:ghettoconv
    Measure the intensity only from areas enclosed by objects?:No
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
ExportToSpreadsheet:[module_num:23|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder sub-folder|20151009_validation_4.5mM
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:Neurons_inner|Intensity_MassDisplacement_inner_neurons,Neurons_inner|Intensity_MinIntensity_inner_neurons,Neurons_inner|Intensity_StdIntensity_inner_neurons,Neurons_inner|Intensity_IntegratedIntensityEdge_inner_neurons,Neurons_inner|Intensity_MinIntensityEdge_inner_neurons,Neurons_inner|Intensity_LowerQuartileIntensity_inner_neurons,Neurons_inner|Intensity_UpperQuartileIntensity_inner_neurons,Neurons_inner|Intensity_MADIntensity_inner_neurons,Neurons_inner|Intensity_MeanIntensity_inner_neurons,Neurons_inner|Intensity_IntegratedIntensity_inner_neurons,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::20151009_validation_4.5mM
    Overwrite without warning?:No
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