CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression:.*[\\\\\\\\/](?P<BigFolder>.*)[\\\\\\\\/](?P<Run>.*)$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
    Select the rule criteria:and (directory does contain "Cropped")
    Name to assign these images:FL
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (directory does contain "Raw")
    Name to assign these images:orig_img
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Run
    Metadata category:BigFolder

ApplyThreshold:[module_num:5|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
    Select the input image:FL
    Name the output image:FL_thresholded
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:No smoothing
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    Manual threshold:0.001
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
MaskImage:[module_num:6|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
    Select the input image:FL
    Name the output image:FL_masked_output
    Use objects or an image as a mask?:Image
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    Select image for mask:FL_thresholded
    Invert the mask?:No

Smooth:[module_num:7|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
    Select the input image:FL_masked_output
    Name the output image:FilteredImage_big
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:50
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
Smooth:[module_num:8|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
    Select the input image:FL_masked_output
    Name the output image:FL_smoothed
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20
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
ImageMath:[module_num:9|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:filtered_image
    Image or measurement?:Image
    Select the first image:FL_smoothed
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:FilteredImage_big
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:filtered_image
    Name the primary objects to be identified:neurons
    Typical diameter of objects, in pixel units (Min,Max):12,70
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:5
    Lower and upper bounds on threshold:.0005,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
MeasureObjectIntensity:[module_num:11|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
    Hidden:1
    Select an image to measure:filtered_image
    Select objects to measure:neurons

MeasureImageIntensity:[module_num:12|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
    Select the image to measure:FL
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:FL
    Measure the intensity only from areas enclosed by objects?:Yes
    Select the input objects:neurons
    Select the image to measure:filtered_image
    Measure the intensity only from areas enclosed by objects?:No
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
OverlayOutlines:[module_num:13|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:orig_img
    Name the output image:overlay_neurons
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:neurons

SaveImages:[module_num:14|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enabled:False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
    Select the type of image to save:Image
    Select the image to save:FL_thresholded
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    Select method for constructing file names:From image filename
    Select image name for file prefix:FL
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|highres_parkin_mask
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:15|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enabled:False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
    Select the type of image to save:Objects
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    Select the objects to save:neurons
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    Select method for constructing file names:From image filename
    Select image name for file prefix:FL
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    Append a suffix to the image file name?:No
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|highres_parkin_neuronID
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Color
    Select colormap:jet
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:16|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
    Select the type of image to save:Image
    Select the image to save:filtered_image
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    Select method for constructing file names:From image filename
    Select image name for file prefix:FL
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    Append a suffix to the image file name?:No
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    Saved file format:tif
    Output file location:Default Output Folder sub-folder|highres_humanparkin3_raw
    Image bit depth:16
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:17|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
    Select the type of image to save:Image
    Select the image to save:overlay_neurons
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    Select method for constructing file names:From image filename
    Select image name for file prefix:FL
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    Append a suffix to the image file name?:No
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    Saved file format:jpeg
    Output file location:Default Output Folder sub-folder|highres_humanparkin3_overlay
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:18|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder sub-folder|2015.12.17 Human Parkin try 3
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:Image|Count_neurons,Image|FileName_FL,Image|Intensity_StdIntensity_FL,Image|Intensity_StdIntensity_FL_neurons,Image|Intensity_TotalIntensity_FL,Image|Intensity_TotalIntensity_FL_neurons,Image|Intensity_TotalIntensity_filtered_image,Image|Intensity_TotalArea_FL,Image|Intensity_TotalArea_FL_neurons,Image|Intensity_MeanIntensity_FL,Image|Intensity_MeanIntensity_FL_neurons,Image|Intensity_MedianIntensity_FL,Image|Intensity_MedianIntensity_FL_neurons,neurons|Intensity_MassDisplacement_filtered_image,neurons|Intensity_MinIntensity_filtered_image,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:Yes
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