CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Regular expression:(?P<Date>[0-9]{4}_[0-9]{2}_[0-9]{2})$
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:cellimages
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:cellimages
    Name the output image:illum
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:cellimages
    Name the output image:images_corrected
    Select the illumination function:illum
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:images_corrected
    Name the primary objects to be identified:cells
    Typical diameter of objects, in pixel units (Min,Max):75,250
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:MCT
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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
Smooth:[module_num:8|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
    Select the input image:images_corrected
    Name the output image:smoothed_corrected
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3
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
EnhanceOrSuppressFeatures:[module_num:9|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
    Select the input image:smoothed_corrected
    Name the output image:Filtered_speckle
    Select the operation:Enhance
    Feature size:5
    Feature type:Speckles
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
MaskImage:[module_num:10|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
    Select the input image:Filtered_speckle
    Name the output image:Mask_speckle
    Use objects or an image as a mask?:Objects
    Select object for mask:cells
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:Mask_speckle
    Name the primary objects to be identified:puncta
    Typical diameter of objects, in pixel units (Min,Max):5,15
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:4
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
RelateObjects:[module_num:12|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
    Select the input child objects:puncta
    Select the input parent objects:cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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
MeasureObjectIntensity:[module_num:13|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
    Hidden:1
    Select an image to measure:cellimages
    Select objects to measure:cells

MeasureObjectIntensity:[module_num:14|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
    Hidden:1
    Select an image to measure:cellimages
    Select objects to measure:puncta

ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:Image|Count_cells,Image|Count_puncta,Image|Width_cellimages,Image|URL_cellimages,Image|Series_cellimages,Image|Frame_cellimages,Image|MD5Digest_cellimages,Image|Height_cellimages,Image|Scaling_cellimages,Image|ModuleError_12RelateObjects,Image|ModuleError_01Images,Image|ModuleError_13MeasureObjectIntensity,Image|ModuleError_07IdentifyPrimaryObjects,Image|ModuleError_06CorrectIlluminationApply,Image|ModuleError_05CorrectIlluminationCalculate,Image|ModuleError_02Metadata,Image|ModuleError_03NamesAndTypes,Image|ModuleError_09EnhanceOrSuppressFeatures,Image|ModuleError_10MaskImage,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix::MyExpt_
    Overwrite without warning?:No
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