CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:21
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Regular expression:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:green
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "2")
    Name to assign these images:Blue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:green
    Name the output image:Illum_green
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:6|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
    Select the input image:green
    Name the output image:green_corrected
    Select the illumination function:Illum_green
    Select how the illumination function is applied:Divide

CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:Blue
    Name the output image:Illum_blue
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Fit Polynomial
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    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:8|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
    Select the input image:Blue
    Name the output image:blue_corrected
    Select the illumination function:Illum_blue
    Select how the illumination function is applied:Divide

IdentifyPrimaryObjects:[module_num:9|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
    Select the input image:green_corrected
    Name the primary objects to be identified:Cell_bodies
    Typical diameter of objects, in pixel units (Min,Max):20,80
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Entropy
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
MaskImage:[module_num:10|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
    Select the input image:green_corrected
    Name the output image:green_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Cell_bodies
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    Invert the mask?:Yes

MaskImage:[module_num:11|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
    Select the input image:blue_corrected
    Name the output image:blue_masked
    Use objects or an image as a mask?:Objects
    Select object for mask:Cell_bodies
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    Invert the mask?:Yes

MeasureImageIntensity:[module_num:12|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
    Select the image to measure:green_masked
    Measure the intensity only from areas enclosed by objects?:No
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    Select the image to measure:blue_masked
    Measure the intensity only from areas enclosed by objects?:No
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
ImageMath:[module_num:13|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:green_bkg_subtracted
    Image or measurement?:Image
    Select the first image:green_corrected
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MedianIntensity_green_masked

ImageMath:[module_num:14|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:blue_bkg_subtracted
    Image or measurement?:Image
    Select the first image:blue_corrected
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_MedianIntensity_blue_masked

ImageMath:[module_num:15|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
    Operation:Divide
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:No
    Ignore the image masks?:No
    Name the output image:green_blue_ratio
    Image or measurement?:Image
    Select the first image:green_bkg_subtracted
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:blue_bkg_subtracted
    Multiply the second image by:1.0
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
MeasureObjectIntensity:[module_num:16|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
    Hidden:1
    Select an image to measure:green_blue_ratio
    Select objects to measure:Cell_bodies

ExportToSpreadsheet:[module_num:17|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|Siyu_expt
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:Image|Count_Cell_bodies,Image|FileName_Blue,Image|FileName_green,Image|FileName_BF,Cell_bodies|Intensity_StdIntensityEdge_green_blue_ratio,Cell_bodies|Intensity_MinIntensity_green_blue_ratio,Cell_bodies|Intensity_StdIntensity_green_blue_ratio,Cell_bodies|Intensity_IntegratedIntensityEdge_green_blue_ratio,Cell_bodies|Intensity_MassDisplacement_green_blue_ratio,Cell_bodies|Intensity_MinIntensityEdge_green_blue_ratio,Cell_bodies|Intensity_IntegratedIntensity_green_blue_ratio,Cell_bodies|Intensity_UpperQuartileIntensity_green_blue_ratio,Cell_bodies|Intensity_MADIntensity_green_blue_ratio,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:No
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
OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:green_bkg_subtracted
    Name the output image:green_overlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cell_bodies

OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:blue_bkg_subtracted
    Name the output image:blue_overlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cell_bodies

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:green_overlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:green
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_identified_green
    Saved file format:png
    Output file location:Default Output Folder sub-folder|siyu_images
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:blue_overlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:green
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_identified_blue
    Saved file format:png
    Output file location:Default Output Folder sub-folder|siyu_images
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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