CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:18
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Regular expression:^(?P<Plate>.*)_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:raw_images
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:C

ApplyThreshold:[module_num:5|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enabled:False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
    Select the input image:raw_images
    Name the output image:image_threshold
    Select the output image type:Grayscale
    Set pixels below or above the threshold to zero?:Below threshold
    Subtract the threshold value from the remaining pixel intensities?:No
    Number of pixels by which to expand the thresholding around those excluded bright pixels:0.0
    Threshold setting version:1
    Threshold strategy:Automatic
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
Resize:[module_num:6|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enabled:False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
    Select the input image:image_threshold
    Name the output image:image_resized
    Resizing method:Resize by a fraction or multiple of the original size
    Resizing factor:4
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    Interpolation method:Nearest Neighbor
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    Additional image count:0

Morph:[module_num:7|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enabled:False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
    Select the input image:image_resized
    Name the output image:image_binarymorphed
    Select the operation to perform:invert
    Number of times to repeat operation:Custom
    Repetition number:1000
    Scale:3
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Morph:[module_num:8|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enabled:False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
    Select the input image:image_binarymorphed
    Name the output image:image_binarymorphed2
    Select the operation to perform:fill small holes
    Number of times to repeat operation:Custom
    Maximum hole area:5
    Scale:3
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
Smooth:[module_num:9|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
    Select the input image:raw_images
    Name the output image:image_smoothed
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:15
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
Smooth:[module_num:10|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
    Select the input image:raw_images
    Name the output image:image_smallsmooth
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:2
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
ImageMath:[module_num:11|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:image_filtered
    Image or measurement?:Image
    Select the first image:image_smallsmooth
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:image_smoothed
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:image_filtered
    Name the primary objects to be identified:worms
    Typical diameter of objects, in pixel units (Min,Max):3,10
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:2
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
SaveImages:[module_num:13|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
    Select the type of image to save:Objects
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    Select the objects to save:worms
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    Select method for constructing file names:Sequential numbers
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    Enter file prefix:wormtracking
    Number of digits:3
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    Saved file format:png
    Output file location:Default Output Folder sub-folder|worm_tracking
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
    Save as grayscale or color image?:Color
    Select colormap:jet
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
TrackObjects:[module_num:14|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
    Choose a tracking method:Overlap
    Select the objects to track:worms
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    Maximum pixel distance to consider matches:10
    Select display option:Color Only
    Save color-coded image?:Yes
    Name the output image:TrackedWorms
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    Filter objects by lifetime?:Yes
    Filter using a minimum lifetime?:Yes
    Minimum lifetime:8
    Filter using a maximum lifetime?:Yes
    Maximum lifetime:30

ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|wormtrack_analysis
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:No
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
SaveImages:[module_num:16|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
    Select the type of image to save:Movie
    Select the image to save:TrackedWorms
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    Select method for constructing file names:From image filename
    Select image name for file prefix:raw_images
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_otsu
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|worm_movie_color_only
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Saved movie format:avi

OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:raw_images
    Name the output image:Overlay_worms
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:worms

SaveImages:[module_num:18|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
    Select the type of image to save:Movie
    Select the image to save:Overlay_worms
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    Select method for constructing file names:From image filename
    Select image name for file prefix:raw_images
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_otsu
    Saved file format:tif
    Output file location:Default Output Folder sub-folder|worm_track_overlay
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Saved movie format:avi
