CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:19
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:im_raw
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Morph:[module_num:5|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
    Select the input image:im_raw
    Name the output image:im_inverted
    Select the operation to perform:invert
    Number of times to repeat operation:Once
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    Scale:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:im_inverted
    Name the output image:Illum
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:Each
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:25
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationApply:[module_num:7|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
    Select the input image:im_inverted
    Name the output image:Corr
    Select the illumination function:Illum
    Select how the illumination function is applied:Divide

Smooth:[module_num:8|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
    Select the input image:Corr
    Name the output image:im_smoothed
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:50
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
Smooth:[module_num:9|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
    Select the input image:Corr
    Name the output image:im_smoothsmall
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:5
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
ImageMath:[module_num:10|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:im_filtered
    Image or measurement?:Image
    Select the first image:im_smoothsmall
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:im_smoothed
    Multiply the second image by:1.0
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
ApplyThreshold:[module_num:11|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
    Select the input image:im_filtered
    Name the output image:thresh_worms
    Select the output image type:Binary (black and white)
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:No smoothing
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
Morph:[module_num:12|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
    Select the input image:thresh_worms
    Name the output image:morph_worms
    Select the operation to perform:invert
    Number of times to repeat operation:Once
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    Scale:5
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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    Select the operation to perform:close
    Number of times to repeat operation:Once
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    Scale:10
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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    Select the operation to perform:open
    Number of times to repeat operation:Once
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    Scale:25
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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    Select the operation to perform:invert
    Number of times to repeat operation:Once
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    Scale:3.0
    Structuring element:Disk
    X offset:1.0
    Y offset:1.0
    Angle:0.0
    Width:3.0
    Height:3.0
    Custom:5,5,1111111111111111111111111
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
IdentifyPrimaryObjects:[module_num:13|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
    Select the input image:morph_worms
    Name the primary objects to be identified:Lawn_edge
    Typical diameter of objects, in pixel units (Min,Max):100,1500
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Manual
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    Select the smoothing method for thresholding:Automatic
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    Manual threshold:0.5
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
MaskImage:[module_num:14|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
    Select the input image:im_filtered
    Name the output image:im_wormsonly
    Use objects or an image as a mask?:Objects
    Select object for mask:Lawn_edge
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:im_wormsonly
    Name the primary objects to be identified:worms
    Typical diameter of objects, in pixel units (Min,Max):15,35
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:20
    Lower and upper bounds on threshold:0.005,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
IdentifyPrimaryObjects:[module_num:16|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enabled:False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
    Select the input image:Corr
    Name the primary objects to be identified:worms
    Typical diameter of objects, in pixel units (Min,Max):15,60
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Three classes
    Minimize the weighted variance or the entropy?:Weighted variance
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:im_raw
    Name the output image:overlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:worms

SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:overlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:im_raw
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:jpg
    Output file location:Default Output Folder sub-folder|images_wormcounting_trial_20160217
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:19|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder sub-folder|20160217_wormtrial
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements to export:Image|Count_worms,Image|FileName_im_raw
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite without warning?:No
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