CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723174500
GitHash:6c2d896
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:orig
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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
    Select the input image:orig
    Name the output image:orig_smallfilt
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:3
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
Smooth:[module_num:6|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
    Select the input image:orig
    Name the output image:orig_bigfilt
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:8
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
Smooth:[module_num:7|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
    Select the input image:orig
    Name the output image:orig_extrabigfilt
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:200
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
ImageMath:[module_num:8|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:filteredimg
    Image or measurement?:Image
    Select the first image:orig_smallfilt
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:orig_bigfilt
    Multiply the second image by:1.0
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
ImageMath:[module_num:9|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:filteredimg_cells
    Image or measurement?:Image
    Select the first image:orig_smallfilt
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:orig_extrabigfilt
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:10|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
    Select the input image:filteredimg_cells
    Name the primary objects to be identified:Cells
    Typical diameter of objects, in pixel units (Min,Max):75,250
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:Otsu
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Minimize the weighted variance or the entropy?:Weighted variance
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
OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:filteredimg
    Name the output image:filteredimg_overlay
    Outline display mode:Color
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    Width of outlines:2
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells

OverlayOutlines:[module_num:12|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:filteredimg_cells
    Name the output image:orig_overlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:Cells

SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:filteredimg_overlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_celloverlay
    Saved file format:png
    Output file location:Elsewhere...|E:\\\\\\\\Juan tests\\\\\\\\CRISPR Spot overlays
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:orig_overlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_celloverlayorig
    Saved file format:png
    Output file location:Elsewhere...|E:\\\\\\\\Juan tests\\\\\\\\CRISPR Spot overlays
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:filteredimg_cells
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    Select method for constructing file names:From image filename
    Select image name for file prefix:orig
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_cellonly
    Saved file format:png
    Output file location:Elsewhere...|E:\\\\\\\\Juan tests\\\\\\\\CRISPR Spot overlays
    Image bit depth:8
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Rescale the images? :Yes
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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